PsychoPy2experiment version="1.85.0"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = untitled
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        # First run 'socat -d -d pty,raw,echo=0 pty,raw,echo=0' to simulate ports

        import serial

        # TODO Chnage device id to something that works
        ser = serial.Serial('/dev/ttys002', 9600, rtscts=True, dsrdtr=True)

        ser.write('hello from psychopy')
        ser.close()
    TextComponent text
      text [set every repeat] = line
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine trial
